<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Verified" Originator="org.silastandard" Category="labware.manipulation"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareTransferManipulatorURController</Identifier>
  <DisplayName>Labware Transfer Manipulator Controller</DisplayName>
  <Description>
    This feature (together with the "Labware Transfer Site Controller" feature) provides commands to trigger the
    sub-tasks of handing over a labware item, e.g. a microtiter plate or a tube, from one device to another in a
    standardized and generic way.

    For each labware transfer a defined sequence of commands has to be called on both involved devices to ensure the
    proper synchronization of all necessary transfer actions without unwanted physical interferences and to optimize
    the transfer performance regarding the execution time. Using the generic commands, labware transfers between any
    arbitrary labware handling devices can be controlled (a robot device has not necessarily to be involved).

    Generally, a labware transfer is executed between a source and a destination device, where one of them is the
    active device (executing the handover actions) and the other one is the passive device.

    The "Labware Transfer Manipulator Controller" feature is used to control the labware transfer on the side of the
    active device to hand over labware to or take over labware from a passive device, which provides the
    "Labware Transfer Site Controller" feature.

    If a device is capable to act either as the active or as the passive device of a labware transfer it must provide
    both features.

    The complete sequence of issued transfer commands on both devices is as follows:

    1. Prior to the actual labware transfer a "Prepare For Output" command is sent to the source device to execute all
       necessary actions to be ready to release a labware item (e.g. open a tray) and simultaneously a "Prepare For
       Input" command is sent to the destination device to execute all necessary actions to be ready to receive a
       labware item (e.g. position the robotic arm near the tray of the source device).
    2. When both devices have successfully finished their "Prepare For ..." command execution, the next commands are
       issued.
    3a If the source device is the active device it will receive a "Put Labware" command to execute all necessary
       actions to put the labware item into the destination device. After the transfer has been finished successfully,
       the destination device receives a "Labware Delivered" command, that triggers all actions to be done after the
       labware item has been transferred (e.g. close the opened tray).
    3b If the destination device is the active device it will receive a "Get Labware" command to execute all necessary
       actions to get the labware from the source device (e.g. gripping the labware item). After that command has been
       finished successfully, the source device receives a "Labware Removed" command, that triggers all actions to be
       done after the labware item has been transferred (e.g. close the opened tray).

    The command sequences for an active source or destination device have always to be as follows:
    - for an active source device:        PrepareForOutput - PutLabware.
    - for an active destination device:   PrepareForInput - GetLabware.

    If the commands issued by the client differ from the respective command sequences an "Invalid Command Sequence"
    error will be raised.

    To address the location, where a labware item can be handed over to or from other devices, every device must
    provide one or more uniquely named positions (handover positions) via the "Available Handover Positions" property.
    A robot (active device) should have at least one handover position for each device that it interacts with, whereas
    most passive devices will only have one handover position. In the case of a position array (e.g. a rack), the
    position within the array is specified via the sub-position of the handover position, passed as an index number.

    To address the positions within a device where the transferred labware item has to be stored at or is to be taken
    from (e.g. the storage positions inside an incubator), the internal position is specified. Each device must provide
    the number of available internal positions via the "Number Of Internal Positions" property. In the case of no
    multiple internal positions, this property as well as the "Internal Position" parameter value must be 1.

    With the "Prepare For Input" command there is also information about the labware transferred, like labware type or
    a unique labware identifier (e.g. a barcode).

    The "Intermediate Actions" parameter of the "Put Labware" and "Get Labware" commands can be used to specify commands
    that have to be executed while a labware item is transferred to avoid unnecessary movements, e.g. if a robot has to
    get a plate from a just opened tray and a lid has to be put on the plate before it will be gripped, the lid handling
    actions have to be included in the "Get Labware" actions. The intermediate actions have to be executed in the same 
    order they have been specified by the "Intermediate Actions" parameter.
    The property "Available Intermediate Actions" returns a list of commands that can be included in a "Put Labware" or
    "Get Labware" command.
  </Description>

  <Command>
    <Identifier>PrepareForInput</Identifier>
    <DisplayName>Prepare For Input</DisplayName>
    <Description>Put the device into a state in which it is ready to accept new labware at the specified handover position.</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position where the labware will be handed over.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPosition</Identifier>
      <DisplayName>Internal Position</DisplayName>
      <Description>Indicates the position which the labware will be stored at within the device, e.g. internal storage positions of an incubator.</Description>
      <DataType>
        <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareType</Identifier>
      <DisplayName>Labware Type</DisplayName>
      <Description>Specifies the type of labware that will be handed over to transfer information about the labware that the device might need to handle it correctly.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareUniqueID</Identifier>
      <DisplayName>Labware Unique ID</DisplayName>
      <Description>Represents the unique identification of a labware in the controlling system. It is assigned by the system and must remain unchanged during the whole process.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>PrepareForOutput</Identifier>
    <DisplayName>Prepare For Output</DisplayName>
    <Description>Put the device into a state in which it is ready to release the labware at the specified handover position.</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position where the labware will be handed over.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPosition</Identifier>
      <DisplayName>Internal Position</DisplayName>
      <Description>Indicates the position which the labware will be retrieved from within the device, e.g. internal storage positions of an incubator.</Description>
      <DataType>
        <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>PutLabware</Identifier>
    <DisplayName>Put Labware</DisplayName>
    <Description>Place the currently processed labware item at the specified handover position (sent to the active source device after a "Prepare For Output" command).</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position the labware item will be moved to.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>IntermediateActions</Identifier>
      <DisplayName>Intermediate Actions</DisplayName>
      <Description>
        Specifies one or more commands that have to be executed within the command sequence (e.g. removing a lid).
        The order of execution is specified by order within the given list.
        Each entry must be one of the commands returned by the AvailableIntermediateCommandExecutions property.
      </Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
      <Identifier>LabwareNotPlaced</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>GetLabware</Identifier>
    <DisplayName>Get Labware</DisplayName>
    <Description>Retrieve a labware item from the specified handover position (sent to the active destination device after a "Prepare For Input" command).</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position where the labware will be retrieved from.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>IntermediateActions</Identifier>
      <DisplayName>Intermediate Actions</DisplayName>
      <Description>
        Specifies one or more commands that have to be executed within the command sequence (e.g. removing a lid).
        The order of execution is specified by order within the given list.
        Each entry must be one of the commands returned by the AvailableIntermediateCommandExecutions property.
      </Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
      <Identifier>LabwareNotPicked</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Property>
    <Identifier>AvailableHandoverPositions</Identifier>
    <DisplayName>Available Handover Positions</DisplayName>
    <Description>All handover positions of the device including the number of sub-positions.</Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
        </DataType>
      </List>
    </DataType>
  </Property>

  <Property>
    <Identifier>NumberOfInternalPositions</Identifier>
    <DisplayName>Number Of Internal Positions</DisplayName>
    <Description>The number of addressable internal positions of the device.</Description>
    <Observable>No</Observable>
    <DataType>
      <Constrained>
        <DataType>
          <Basic>Integer</Basic>
        </DataType>
        <Constraints>
          <MinimalInclusive>1</MinimalInclusive>
        </Constraints>
      </Constrained>
    </DataType>
  </Property>

  <Property>
    <Identifier>AvailableIntermediateActions</Identifier>
    <DisplayName>Available Intermediate Actions</DisplayName>
    <Description>Returns all commands that can be executed within a "Put Labware" or "Get Labware" command execution.</Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <Constrained>
            <DataType>
              <Basic>String</Basic>
            </DataType>
            <Constraints>
              <FullyQualifiedIdentifier>CommandIdentifier</FullyQualifiedIdentifier>
            </Constraints>
          </Constrained>
        </DataType>
      </List>
    </DataType>
  </Property>

  <DataTypeDefinition>
    <Identifier>HandoverPosition</Identifier>
    <DisplayName>Handover Position</DisplayName>
    <Description>Specifies one of the possible positions of a device where labware items can be handed over. Can contain a sub-position, e.g. for specifying a position in a rack.</Description>
    <DataType>
      <Structure>
        <Element>
          <Identifier>Position</Identifier>
          <DisplayName>Position</DisplayName>
          <Description>The name of the handover position (must be unique within the device).</Description>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>SubPosition</Identifier>
          <DisplayName>Sub Position</DisplayName>
          <Description>The index of a sub-position within a handover position or the number of sub-positions respectively, e.g. for a rack.</Description>
          <DataType>
            <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
          </DataType>
        </Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <DataTypeDefinition>
    <Identifier>PositionIndex</Identifier>
    <DisplayName>Position Index</DisplayName>
    <Description>Specifies a position via an index number, starting at 1.</Description>
    <DataType>
      <Constrained>
        <DataType>
          <Basic>Integer</Basic>
        </DataType>
        <Constraints>
          <MinimalInclusive>1</MinimalInclusive>
        </Constraints>
      </Constrained>
    </DataType>
  </DataTypeDefinition>

  <DefinedExecutionError>
    <Identifier>InvalidCommandSequence</Identifier>
    <DisplayName>Invalid Command Sequence</DisplayName>
    <Description>The issued command does not follow the sequence of commands for the device according to its role in the labware transfer.</Description>
  </DefinedExecutionError>

  <DefinedExecutionError>
    <Identifier>LabwareNotPicked</Identifier>
    <DisplayName>Labware Not Picked</DisplayName>
    <Description>Picking up the labware item from the source device failed.</Description>
  </DefinedExecutionError>

  <DefinedExecutionError>
    <Identifier>LabwareNotPlaced</Identifier>
    <DisplayName>Labware Not Placed</DisplayName>
    <Description>Placing the labware item at the destination device failed.</Description>
  </DefinedExecutionError>

</Feature>
