 <?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Verified" Originator="org.silastandard" Category="labware.manipulation"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareTransferSiteFestoController</Identifier>
  <DisplayName>Labware Transfer Site Controller</DisplayName>
  <Description>
    This feature (together with the "Labware Transfer Manipulator Controller" feature) provides commands to trigger the
    sub tasks of handing over a labware item, e.g. a microtiter plate, from one device to another in a standardized and
    generic way.

    For each labware transfer a defined sequence of commands has to be called on both involved devices to ensure the
    proper synchronization of all necessary transfer actions without unwanted physical interferences and to optimize
    the transfer performance regarding the execution time. Using the generic commands labware transfers between any
    arbitrary labware handling devices can be controlled (a robot device has not necessarily be involved).

    Generally a labware transfer is executed between a source and a destination device, where one of them is the
    active device (executing the actual handover actions) and the other one is the passive device.

    The "Labware Transfer Site Controller" feature is used to control the labware transfer on the side of the
    passive device to hand over a labware to or taking over a labware from an active device, which provides the
    "Labware Transfer Manipulator Controller" feature.

    If a device is capable to act either as the active or as the passive device of a labware transfer it must provide
    both features.

    The complete sequence of issued transfer commands on both devices is as follows:

    1. Prior to the actual labware transfer a "Prepare For Output" command is sent to the source device to execute all
       necessary actions to be ready to release a labware item (e.g. open a tray) and simultaneously a "Prepare For
       Input" command is sent to the destination device to execute all necessary actions to be ready to receive a
       labware item (e.g. position the robotic arm near the tray of the source device).
    2. When both devices have successfully finished their "Prepare For ..." command execution, the next commands are
       issued.
    3a If the source device is the active device it will receive a "Put Labware" command to execute all necessary 
       actions to put the labware item to the destination device. After the transfer has been finished successfully the 
       destination device receives a "Labware Delivered" command, that triggers all actions to be done after the 
       labware item has been transferred (e.g. close the opened tray).
    3b If the destination device is the active device it will receive a "Get Labware" command to execute all necessary
       actions to get the labware from the source device (e.g. gripping the labware item). After that command has been
       finished successfully the source device receives a "Labware Removed" command, that triggers all actions to be
       done after the labware item has been transferred (e.g. close the opened tray).

    The command sequences for a passive source or destination device have always to be as follows:
    - for a passive source device:        PrepareForOutput - LabwareRemoved
    - for a passive destination device:   PrepareForInput - LabwareDelivered

    If the commands issued by the client differ from the respective command sequences a "Invalid Command Sequence"
    error will be raised.

    To address the location, where a labware item can be handed over to or from other devices, every device must
    provide one or more uniquely named positions (handover positions) via the "Available Handover Positions" property.
    A robot usually has got at least one handover position for each other device that it interacts with, whereas the
    most none-transport devices will only have one handover position.
    In case of a position array (e.g. a rack) the position within the array is specified via the sub position of the
    handover position, passed as index number.

    To address the positions within a device where the transferred labware item has to be stored at or is to be taken
    from (e.g. the storage positions inside an incubator), the internal position can be specified. Each device must
    provide the the number of available internal positions via the "Number Of Internal Positions" property.

    With the "Prepare For Input" command there is also information about the labware transferred, like labware type or 
    a unique labware identifier (e.g. a barcode).
  </Description>

  <Command>
    <Identifier>PrepareForInput</Identifier>
    <DisplayName>Prepare For Input</DisplayName>
    <Description>Put the device into a state where it is ready to accept new labware at the specified handover position.</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position where the labware will be handed over.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPosition</Identifier>
      <DisplayName>Internal Position</DisplayName>
      <Description>Indicates the position where the labware will stored at inside the device, e.g. a storage position within an incubator.</Description>
      <DataType>
        <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareType</Identifier>
      <DisplayName>Labware Type</DisplayName>
      <Description>Specifies the type of the labware that will be handed over to transfer information about the labware that the device might need to access it correctly.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareUniqueID</Identifier>
      <DisplayName>Labware Unique ID</DisplayName>
      <Description>The labwareUniqueID represents the unique identification of a labware in the controlling system. It is assigned by the system and stays the same for the whole process.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>PrepareForOutput</Identifier>
    <DisplayName>Prepare For Output</DisplayName>
    <Description>Put the device into a state where it is ready to release the labware at the specified handover position.</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position where the labware will be handed over.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPosition</Identifier>
      <DisplayName>Internal Position</DisplayName>
      <Description>Indicates the position where the labware will be retrieved from inside the device, e.g. a storage position within an incubator.</Description>
      <DataType>
        <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>LabwareDelivered</Identifier>
    <DisplayName>Labware Delivered</DisplayName>
    <Description>Notifies the passive destination device of a labware item that has been transferred to it (sent after a "PrepareForInput" command).</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position the labware item has been delivered to.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>LabwareRemoved</Identifier>
    <DisplayName>Labware Removed</DisplayName>
    <Description>Notifies the passive source device of a labware item that has been removed from it (sent after a "PrepareForOutput" command).</Description>
    <Observable>Yes</Observable>

    <Parameter>
      <Identifier>HandoverPosition</Identifier>
      <DisplayName>Handover Position</DisplayName>
      <Description>Indicates the position the labware has been removed from.</Description>
      <DataType>
        <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
      </DataType>
    </Parameter>

    <DefinedExecutionErrors>
      <Identifier>InvalidCommandSequence</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Property>
    <Identifier>AvailableHandoverPositions</Identifier>
    <DisplayName>Available Handover Positions</DisplayName>
    <Description>All handover positions of the device including the number of sub positions</Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <DataTypeIdentifier>HandoverPosition</DataTypeIdentifier>
        </DataType>
      </List>
    </DataType>
  </Property>

  <Property>
    <Identifier>NumberOfInternalPositions</Identifier>
    <DisplayName>Number Of Internal Positions</DisplayName>
    <Description>The number of addressable internal positions of the device</Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Integer</Basic>
    </DataType>
  </Property>

  <DataTypeDefinition>
    <Identifier>HandoverPosition</Identifier>
    <DisplayName>Handover Position</DisplayName>
    <Description>Specifies one of the possible positions of a device where labware items can be handed over. Can contain a sub position, e.g. for specifying a position in a rack.</Description>
    <DataType>
      <Structure>
        <Element>
          <Identifier>Position</Identifier>
          <DisplayName>Position</DisplayName>
          <Description>The name of the handover position (must be unique within the device).</Description>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>SubPosition</Identifier>
          <DisplayName>Sub Position</DisplayName>
          <Description>The index of a sub position within a handover position or the number of sub positions repectively, e.g. for a rack.</Description>
          <DataType>
            <DataTypeIdentifier>PositionIndex</DataTypeIdentifier>
          </DataType>
        </Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <DataTypeDefinition>
    <Identifier>PositionIndex</Identifier>
    <DisplayName>Position Index</DisplayName>
    <Description>Specifies a position via an index number, starting with 1.</Description>
    <DataType>
      <Constrained>
        <DataType>
          <Basic>Integer</Basic>
        </DataType>
        <Constraints>
          <MinimalInclusive>1</MinimalInclusive>
        </Constraints>
      </Constrained>
    </DataType>
  </DataTypeDefinition>

  <DefinedExecutionError>
    <Identifier>InvalidCommandSequence</Identifier>
    <DisplayName>Invalid Command Sequence</DisplayName>
    <Description>The issued command does not follow the sequence of commands for the device according to its role in the labware transfer.</Description>
  </DefinedExecutionError>

  <DefinedExecutionError>
    <Identifier>LabwareNotPicked</Identifier>
    <DisplayName>Labware Not Picked</DisplayName>
    <Description>Picking up the labware item from the source device failed.</Description>
  </DefinedExecutionError>

  <DefinedExecutionError>
    <Identifier>LabwareNotPlaced</Identifier>
    <DisplayName>Labware Not Placed</DisplayName>
    <Description>Placing the labware item at the destination device failed.</Description>
  </DefinedExecutionError>

</Feature>